# Version 1.1.0

string participant;
int logfile_inc = 1;

if logfile.subject() == "" then
	participant = "NULL 999"
else
	participant = logfile.subject();
end;

string filename; 
output_file log = new output_file;

### CREATE LOGFILE

sub
	create_logfile
begin
	
	loop
		bool log_success
	until
		log_success == true
	begin

		filename = filename_prefix + participant + "_" + string( logfile_inc ) + ".txt";

		if use_local_save == true then
			create_directory( local_path );
			if file_exists( local_path + filename ) then
				# do nothing
			else
				log.open( local_path + filename );
				break
			end;

		else
			if file_exists( logfile_directory + filename ) then
				# do nothing
			else
				log.open( filename );
				break
			end;
		end;
		
		logfile_inc = logfile_inc + 1;

	end;

end;


### LOCAL FILE >> NETWORK FILE ###

sub
	bool sub_save_to_network( string path, string name, bool save )
begin

	if save == true then

		# Create message graphic and present
		
		line_graphic message_box = new line_graphic();
		message_box.set_next_line_color( 0, 255, 0, 255 );
		message_box.set_line_width( 5.0 );
		message_box.set_next_join_type( join_circle );
		message_box.add_line( -300, 100, 300, 100 );
		message_box.line_to( 300, -100 );
		message_box.line_to( -300, -100 );
		message_box.close( false );
		message_box.redraw();

		text saving_text = new text();
		saving_text.set_font_color( 0, 255, 0 );
		saving_text.set_caption( "Saving logfile...", true );

		picture saving_pic = new picture();
		saving_pic.add_part( message_box, 0, 0 );
		saving_pic.add_part( saving_text, 0, 0 );

		saving_pic.present();
		wait_interval( 2000 );

		# Copy local version of logfile to network location

		input_file local_input = new input_file();
		
		if local_input.open( path + name, false ) == false then
			return false;
		else
		end;

		output_file final_output = new output_file();
		final_output.open_append( name );

		loop
		until
			local_input.end_of_file() == true
		begin
			final_output.print_line( local_input.get_line() );
		end;

		# Update message and present

		saving_text.set_caption( "Logfile saved!", true );

		saving_pic.present();
		wait_interval( 2000 );

	else
		
		# do not perform network save operation
		
	end;

	return true;
end;
